<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT0S</rx:DueTime>
            <rx:Period>PT1S</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Sink">
          <Name>stimOn</Name>
          <Description />
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="GreaterThan">
                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                  <Value>1</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>Response</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>None</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Sink">
          <Name>stimOff</Name>
          <Description />
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Repeat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>C:\Users\dennise\Desktop\Basler_acA2040-90umNIR__24121204__20220419_105054047.mp4</cv:FileName>
            <cv:PlaybackRate>0</cv:PlaybackRate>
            <cv:StartPosition>0</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>false</cv:Loop>
            <cv:Playing>false</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PublishSubject">
          <Name>still</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Crop">
            <cv:RegionOfInterest>
              <cv:X>500</cv:X>
              <cv:Y>500</cv:Y>
              <cv:Width>1000</cv:Width>
              <cv:Height>1000</cv:Height>
            </cv:RegionOfInterest>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>C:\Users\dennise\Desktop\Basler_acA2040-90umNIR__24121204__20220419_105054047.mp4</cv:FileName>
            <cv:PlaybackRate>0</cv:PlaybackRate>
            <cv:StartPosition>0</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>false</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PublishSubject">
          <Name>stream</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Crop">
            <cv:RegionOfInterest>
              <cv:X>500</cv:X>
              <cv:Y>500</cv:Y>
              <cv:Width>1000</cv:Width>
              <cv:Height>1000</cv:Height>
            </cv:RegionOfInterest>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Subtract" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:HsvThreshold">
            <cv:Lower>
              <cv:Val0>40</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>250</cv:Val0>
              <cv:Val1>250</cv:Val1>
              <cv:Val2>250</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:RoiActivity">
            <cv:Regions>
              <cv:ArrayOfPoint>
                <cv:Point>
                  <cv:X>539</cv:X>
                  <cv:Y>978</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>0</cv:X>
                  <cv:Y>978</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>0</cv:X>
                  <cv:Y>413</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>539</cv:X>
                  <cv:Y>413</cv:Y>
                </cv:Point>
              </cv:ArrayOfPoint>
            </cv:Regions>
            <cv:Operation>Sum</cv:Operation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:RoiActivityDetected">
            <cv:Index>0</cv:Index>
            <cv:Threshold>175000</cv:Threshold>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>