<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="IntProperty">
            <Value>11</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="IntProperty">
            <Value>10</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GreaterThan" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:DistinctUntilChanged" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="IntProperty">
            <Value>1</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:SerialStringWrite">
            <io:PortName>COM4</io:PortName>
            <io:NewLine>\r\n</io:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Count" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SubscribeWhen" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:TriggeredBuffer">
            <dsp:Count>0</dsp:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TriggeredBuffer">
            <rx:Count xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>CheckCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isNotMoving</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>Timer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" />
                    <Property Name="Period" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT2S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM4</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\emily\Desktop\data\chirp_times_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:PythonSource">
          <scr:Script>@returns(int)
def generate():
  yield 0</scr:Script>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Accumulate" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>